PsychoPy2experiment version="1.77.00"
Settings
  Save csv file = True
  Monitor = testMonitor
  Window size (pixels) = [800, 800]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u'ae'}
  Save excel file = True
  expName = dotSeqExample
  Units = use prefs
  Saved data folder = Data
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Routine:
        circleOpacity = 0.3
        circleRadius = 100
        markerSize = 20
        targetFillColor = [1, 1, -1] # yellow
        targetDuration = 30
        targetSize = [40, 40]
        #

        positions = {'pos1': [circleRadius*sin(pi/4), circleRadius*cos(pi/4)],
                     'pos2': [circleRadius*sin(3*pi/4), circleRadius*cos(3*pi/4)],
                     'pos3': [circleRadius*sin(5*pi/4), circleRadius*cos(5*pi/4)],
                     'pos4': [circleRadius*sin(7*pi/4), circleRadius*cos(7*pi/4)]}

        fixCross = visual.TextStim(win=win, ori=0, name='fixCross',
            text='+',    font='Arial',
            units='pix', pos=[0, 0], height=20, wrapWidth=None,
            color='white', colorSpace='rgb', opacity=1,
            depth=-4.0)

        circle = visual.Circle(win = win, radius = circleRadius, edges=512, lineColor =
                               (1, 1, 1), fillColor = 'black', fillColorSpace = 'rgb',
                               interpolate = True, opacity = 0)

        pos1 = visual.Circle(win = win, pos=positions['pos1'], radius = markerSize,
                             edges=256, lineColor = (1, 1, 1), fillColor = 'black',
                             fillColorSpace = 'rgb', interpolate = True, opacity =
                             circleOpacity)

        pos2 = visual.Circle(win = win, pos=positions['pos2'], radius = markerSize,
                             edges=256, lineColor = (1, 1, 1), fillColor = 'black',
                             fillColorSpace = 'rgb', interpolate = True, opacity =
                             circleOpacity)

        pos3 = visual.Circle(win = win, pos=positions['pos3'], radius = markerSize,
                             edges=256, lineColor = (1, 1, 1), fillColor = 'black',
                             fillColorSpace = 'rgb', interpolate = True, opacity =
                             circleOpacity)

        pos4 = visual.Circle(win = win, pos=positions['pos4'], radius = markerSize,
                             edges=256, lineColor = (1, 1, 1), fillColor = 'black',
                             fillColorSpace = 'rgb', interpolate = True, opacity =
                             circleOpacity)

        target = visual.Circle(win = win, pos=positions['pos4'], radius = markerSize,
                             edges=256, lineColor = (1, 1, 1), fillColor = targetFillColor,
                             fillColorSpace = 'rgb', interpolate = True, opacity = 1)
    GratingComponent pos1
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      mask = circle
      startEstim = 0
      startVal [frame N] = 0
      sf = None
      size = [200, 200]
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    GratingComponent pos2
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      startEstim = 0
      startVal [frame N] = 0
      sf = None
      size = [200, 200]
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    GratingComponent pos3
      tex = sin
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      startEstim = 0
      startVal [frame N] = 0
      sf = None
      size = [0.5, 0.5]
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    GratingComponent pos4
      tex = sin
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      startEstim = 0
      startVal [frame N] = 0
      sf = None
      size = [0.5, 0.5]
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    GratingComponent target
      tex = sin
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      pos [set every repeat] = thisPosition
      startEstim = 0
      startVal [frame N] = 0
      sf = None
      size = [0.5, 0.5]
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    TextComponent fixCross
      opacity = 0.3
      text = +
      stopVal [duration (frames)] = 30
      durationEstim = 0.5
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 30
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    KeyboardComponent keyResponse
      correctAns = $isCatchTrial
      storeCorrect = True
      stopVal [duration (s)] = trialDuration
      durationEstim = 0.5
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = 'space'
      startVal [frame N] = 0
      store = first key
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  Routine pause
    TextComponent text
      text = pause
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 30
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator outer_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator inner_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine trial
    LoopTerminator inner_loop
  LoopTerminator outer_loop
